# iaf_chxk_2008 - Conductance based leaky integrate-and-fire neuron model used in Casti et al. 2008
# #################################################################################################
#
# Description
# +++++++++++
#
# iaf_chxk_2008 is an implementation of a spiking neuron using IAF dynamics with
# conductance-based synapses [1]_. A spike is emitted when the membrane potential
# is crossed from below. After a spike, an afterhyperpolarizing (AHP) conductance
# is activated which repolarizes the neuron over time. Membrane potential is not
# reset explicitly and the model also has no explicit refractory time.
#
# The AHP conductance and excitatory and inhibitory synaptic input conductances
# follow alpha-function time courses as in the iaf_cond_alpha model.
#
# .. note ::
#
#    In the original Fortran implementation underlying [1]_, all previous AHP activation was discarded when a new spike
#    occurred, leading to reduced AHP currents in particular during periods of high spiking activity. Set ``ahp_bug`` to
#    ``true`` to obtain this behavior in the model.
#
#
# References
# ++++++++++
#
# .. [1] Casti A, Hayot F, Xiao Y, Kaplan E (2008) A simple model of retina-LGN
#        transmission. Journal of Computational Neuroscience 24:235-252.
#        DOI: https://doi.org/10.1007/s10827-007-0053-7
#
#
# See also
# ++++++++
#
# iaf_cond_alpha
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model iaf_chxk_2008_neuron:

    state:
        V_m "electrical potential" = E_L                      # membrane potential
        V_m_prev "electrical potential" = E_L                 # membrane potential
        g_ahp "electrical conductance" = 0 nS                 # AHP conductance
        g_ahp' "electrical conductance" / time = 0 nS / ms    # AHP conductance

    equations:
        kernel g_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel g_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)
        g_ahp'' = -2 * g_ahp' / tau_ahp - g_ahp / tau_ahp**2

        inline I_syn_exc "electrical current" = unit_psg * convolve(g_exc, exc_spikes) * (V_m - E_exc)
        inline I_syn_inh "electrical current" = unit_psg * convolve(g_inh, inh_spikes) * (V_m - E_inh)
        inline I_ahp "electrical current" = g_ahp * (V_m - E_ahp)
        inline I_leak "electrical current" = g_L * (V_m - E_L)

        V_m' = (-I_leak - I_syn_exc - I_syn_inh - I_ahp + I_e + I_stim) / C_m

    parameters:
        V_th "electrical potential" = -45.0 mV      # Threshold potential
        E_exc "electrical potential" = 20 mV        # Excitatory reversal potential
        E_inh "electrical potential" = -90 mV       # Inhibitory reversal potential
        g_L "electrical conductance" = 100 nS       # Leak conductance
        C_m "electrical capacitance" = 1000.0 pF    # Membrane capacitance
        E_L "electrical potential" = -60.0 mV       # Leak reversal potential (a.k.a. resting potential)
        tau_syn_exc time = 1 ms                     # Synaptic time constant of excitatory synapse
        tau_syn_inh time = 1 ms                     # Synaptic time constant of inhibitory synapse
        tau_ahp time = 0.5 ms                       # Afterhyperpolarization (AHP) time constant
        G_ahp "electrical conductance" = 443.8 nS   # AHP conductance
        E_ahp "electrical potential" = -95 mV       # AHP potential
        ahp_bug boolean = false                     # If true, discard AHP conductance value from previous spikes

        # constant external input current
        I_e "electrical current" = 0 pA

    internals:
        PSConInit_AHP real = G_ahp * e / tau_ahp * (1 ms / nS)

        unit_psg "electrical conductance" = 1 nS    # Unitary postsynaptic conductance amplitude

    input:
        inh_spikes <- inhibitory spike
        exc_spikes <- excitatory spike
        I_stim "electrical current" <- continuous

    output:
        spike

    update:
        V_m_prev = V_m
        integrate_odes()

    onCondition(V_m_prev < V_th and V_m >= V_th):
        # Find precise spike time using linear interpolation
        sigma real = (V_m - V_th) * resolution() / (V_m - V_m_prev) / 1 ms

        alpha real = exp(-sigma / tau_ahp)

        delta_dg_ahp real = PSConInit_AHP * alpha
        delta_g_ahp real = delta_dg_ahp * sigma

        if ahp_bug == true:
            # Bug in original code ignores AHP conductance from previous spikes
            g_ahp = delta_g_ahp * 1 nS
            g_ahp' = delta_dg_ahp * 1 nS / ms
        else:
            # Correct implementation adds initial values for new AHP to AHP history
            g_ahp += delta_g_ahp * 1 nS
            g_ahp' += delta_dg_ahp * 1 nS / ms

        emit_spike()
