# iaf_psc_exp_htum - Leaky integrate-and-fire model with separate relative and absolute refractory period
# #######################################################################################################
#
# Description
# +++++++++++
#
# iaf_psc_exp_htum is an implementation of a leaky integrate-and-fire model
# with exponential-kernel postsynaptic currents (PSCs) according to [1]_.
# The postsynaptic currents have an infinitely short rise time.
# In particular, this model allows setting an absolute and relative
# refractory time separately, as required by [1]_.
#
# The threshold crossing is followed by an absolute refractory period
# (t_ref_abs) during which the membrane potential is clamped to the resting
# potential. During the total refractory period (t_ref_tot), the membrane
# potential evolves, but the neuron will not emit a spike, even if the
# membrane potential reaches threshold. The total refractory time must be
# larger or equal to the absolute refractory time. If equal, the
# refractoriness of the model if equivalent to the other models of NEST.
#
# .. note::
#
#    This neuron model can only be used in combination with a fixed
#    simulation resolution (timestep size).
#
# References
# ++++++++++
#
# .. [1] Tsodyks M, Uziel A, Markram H (2000). Synchrony generation in recurrent
#        networks with frequency-dependent synapses. The Journal of Neuroscience,
#        20,RC50:1-5. URL: https://infoscience.epfl.ch/record/183402
# .. [2] Hill, A. V. (1936). Excitation and accommodation in nerve. Proceedings of
#        the Royal Society of London. Series B-Biological Sciences, 119(814), 305-355.
#        DOI: https://doi.org/10.1098/rspb.1936.0012
# .. [3] Rotter S,  Diesmann M (1999). Exact simulation of
#        time-invariant linear systems with applications to neuronal
#        modeling. Biologial Cybernetics 81:381-402.
#        DOI: https://doi.org/10.1007/s004220050570
# .. [4] Diesmann M, Gewaltig M-O, Rotter S, & Aertsen A (2001). State
#        space analysis of synchronous spiking in cortical neural
#        networks. Neurocomputing 38-40:565-571.
#        DOI: https://doi.org/10.1016/S0925-2312(01)00409-X
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model iaf_psc_exp_htum_neuron:
    state:
        r_tot  integer = 0
        r_abs  integer = 0

        V_m "electrical potential" = 0.0 mV    # Membrane potential

    equations:
        kernel I_kernel_inh = exp(-t / tau_syn_inh)
        kernel I_kernel_exc = exp(-t / tau_syn_exc)
        inline I_syn "electrical current" = unit_psc * (convolve(I_kernel_exc, exc_spikes) - convolve(I_kernel_inh, inh_spikes))
        V_m' = -V_m / tau_m + (I_syn + I_e + I_stim) / C_m

    parameters:
        C_m "electrical capacitance" = 250 pF    # Capacitance of the membrane
        tau_m time = 10 ms                       # Membrane time constant
        tau_syn_inh time = 2 ms                  # Time constant of inhibitory synaptic current
        tau_syn_exc time = 2 ms                  # Time constant of excitatory synaptic current
        t_ref_abs time = 2 ms                    # Absolute refractory period
        t_ref_tot time = 2 ms [[t_ref_tot >= t_ref_abs]]    # Total refractory period, if t_ref_abs == t_ref_tot iaf_psc_exp_htum equivalent to iaf_psc_exp
        E_L "electrical potential" = -70 mV                # Resting potential
        V_reset "electrical potential" = -70.0 mV - E_L    # Reset value of the membrane potential, RELATIVE TO RESTING POTENTIAL(!) I.e. the real threshold is (V_reset + E_L).
        V_th "electrical potential" = -55.0 mV - E_L       # Threshold, RELATIVE TO RESTING POTENTIAL(!) I.e. the real threshold is (E_L + V_th)

        I_e "electrical current" = 0 pA    # Constant external input current

    internals:
        # t_ref_abs (and similarly for t_ref_tot) specifies the length of the absolute refractory period in ms. This neuron model only supports refractory periods that are integer multiples of the simulation resolution (timestep).
        RefractoryCountsAbs integer = steps(t_ref_abs) [[RefractoryCountsAbs > 0]]
        RefractoryCountsTot integer = steps(t_ref_tot) [[RefractoryCountsTot > 0]]

        unit_psc "electrical current" = 1 pA    # Unitary postsynaptic current amplitude

    input:
        exc_spikes <- excitatory spike
        inh_spikes <- inhibitory spike
        I_stim "electrical current" <- continuous

    output:
        spike

    update:
        if r_abs == 0: # neuron not absolute refractory, so evolve membrane potential
            integrate_odes(V_m)
        else:
            r_abs -= 1 # neuron is absolute refractory

        if r_tot == 0 and V_m >= V_th:
            r_abs = RefractoryCountsAbs
            r_tot = RefractoryCountsTot
            V_m = V_reset
            emit_spike()
        else:
            r_tot -= 1 # neuron is totally refractory (cannot generate spikes)
