# izhikevich - Izhikevich neuron model
# ####################################
#
# Description
# +++++++++++
#
# Implementation of the simple spiking neuron model introduced by Izhikevich [1]_. The dynamics are given by:
#
# .. math::
#
#    dV_{m}/dt &= 0.04 V_\mathrm{m}^2 + 5 V_\mathrm{m} + 140 - U_\mathrm{m} + I\\
#    dU_{m}/dt &= a (b V_\mathrm{m} - U_\mathrm{m})
#
# .. math::
#
#    &\text{if}\;\; V_\mathrm{m} \geq V_{th}:\\
#    &\;\;\;\; V_\mathrm{m} \text{ is set to } c\\
#    &\;\;\;\; U_\mathrm{m} \text{ is incremented by } d\\
#    & \, \\
#    &V_\mathrm{m} \text{ jumps on each spike arrival by the weight of the spike}
#
# Incoming spikes cause an instantaneous jump in the membrane potential proportional to the strength of the synapse.
#
# As published in [1]_, the numerics differs from the standard forward Euler technique in two ways:
#
# 1. the new value of :math:`U_\mathrm{m}` is calculated based on the new value of :math:`V_\mathrm{m}`, rather than the previous value
# 2. the variable :math:`V_\mathrm{m}` is updated using a time step half the size of that used to update variable :math:`U_\mathrm{m}`.
#
# This model will instead be simulated using the numerical solver that is recommended by ODE-toolbox during code generation.
#
# References
# ++++++++++
#
# .. [1] Izhikevich, Simple Model of Spiking Neurons, IEEE Transactions on Neural Networks (2003) 14:1569-1572
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model izhikevich_neuron:
    state:
        V_m mV = V_m_init         # Membrane potential
        U_m real = b * V_m_init   # Membrane potential recovery variable

    equations:
        V_m' = (0.04 * V_m * V_m / 1 mV + 5 * V_m + (140 - U_m) * 1 mV + ((I_e + I_stim) * 1 GOhm)) / 1 ms
        U_m' = a * (b * V_m - U_m * 1 mV) / (1 mV*ms)

    parameters:
        a real = 0.02           # describes time scale of recovery variable
        b real = 0.2            # sensitivity of recovery variable
        c mV = -65 mV           # after-spike reset value of V_m
        d real = 8.0            # after-spike reset value of U_m
        V_m_init mV = -65 mV    # initial membrane potential
        V_min mV = -inf * 1 mV  # Absolute lower value for the membrane potential.
        V_th mV = 30 mV         # Threshold potential

        # constant external input current
        I_e pA = 0 pA

    internals:
        unit_psp mV = 1 mV        # Unitary postsynaptic membrane potential

    input:
        spike_in_port <- spike
        I_stim pA <- continuous

    output:
        spike

    onReceive(spike_in_port):
        # Add synaptic input
        V_m += unit_psp * get_weight(spike_in_port, t)

        # lower bound of membrane potential
        V_m = max(V_min, V_m)

    update:
        integrate_odes()

    onCondition(V_m >= V_th):
        # threshold crossing
        V_m = c
        U_m += d
        emit_spike()
