# izhikevich_psc_alpha - Detailed Izhikevich neuron model with alpha-kernel post-synaptic current
# ###############################################################################################
#
# Description
# +++++++++++
#
# Implementation of the simple spiking neuron model introduced by Izhikevich [1]_, with membrane potential in (milli)volt
# and current-based synapses.
#
# The dynamics are given by:
#
# .. math::
#
#    C_m \frac{dV_\mathrm{m}}{dt} = k (V - V_\mathrm{t})(V - V_\mathrm{t}) - u + I + I_\mathrm{syn,ex} + I_\mathrm{syn,in}
#    \frac{dU_\mathrm{m}}{dt} = a(b(V_\mathrm{m} - E_\mathrm{L}) - U_\mathrm{m})
#
#    &\text{if}\;\;\; V_\mathrm{m} \geq V_\mathrm{th}:\\
#    &\;\;\;\; V_\mathrm{m} \text{ is set to } c
#    &\;\;\;\; U_\mathrm{m} \text{ is incremented by } d
#
# On each spike arrival, the membrane potential is subject to an alpha-kernel current of the form:
#
# .. math::
#
#    I_syn = I_0 \cdot t \cdot \exp\left(-t/\tau_\mathrm{syn}\right) / \tau_\mathrm{syn}
#
# See also
# ++++++++
#
# izhikevich, iaf_psc_alpha
#
#
# References
# ++++++++++
#
# .. [1] Izhikevich, Simple Model of Spiking Neurons, IEEE Transactions on Neural Networks (2003) 14:1569-1572
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model izhikevich_psc_alpha_neuron:
    state:
        V_m mV = -65 mV # Membrane potential
        U_m pA = 0 pA   # Membrane potential recovery variable
        refr_t ms = 0 ms    # Refractory period timer

    equations:
        # synapses: alpha functions
        kernel K_syn_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel K_syn_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)

        inline I_syn_exc pA = unit_psc * convolve(K_syn_exc, exc_spikes)
        inline I_syn_inh pA = unit_psc * convolve(K_syn_inh, inh_spikes)

        V_m' = (k * (V_m - V_r) * (V_m - V_t) - U_m + I_e + I_stim + I_syn_exc - I_syn_inh) / C_m
        U_m' = a * (b * (V_m - V_r) - U_m)
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero, at a rate of one (milli)second per (milli)second

    parameters:
        C_m pF = 200 pF           # Membrane capacitance
        k pF/mV/ms = 8 pF/mV/ms   # Spiking slope
        V_r mV = -65 mV           # Resting potential
        V_t mV = -45 mV           # Threshold potential
        a 1/ms = 0.01 ms**-1      # Time scale of recovery variable
        b nS = 9 nS               # Sensitivity of recovery variable
        c mV = -65 mV             # After-spike reset value of V_m
        d pA = 60 pA              # After-spike reset value of U_m
        V_peak mV = 0 mV          # Spike detection threshold (reset condition)
        tau_syn_exc ms = 0.2 ms   # Synaptic time constant of excitatory synapse
        tau_syn_inh ms = 2 ms     # Synaptic time constant of inhibitory synapse
        refr_T ms = 2 ms          # Duration of refractory period

        # constant external input current
        I_e pA = 0 pA

    internals:
        unit_psc pA = 1 pA        # Unitary postsynaptic current amplitude

    input:
        inh_spikes <- spike
        exc_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if refr_t > 0 ms:
            # neuron is absolute refractory, do not evolve V_m
            integrate_odes(refr_t)
        else:
            # neuron not refractory
            integrate_odes(V_m, U_m)

    onCondition(refr_t <= 0 ms and V_m >= V_peak):
        # threshold crossing
        refr_t = refr_T    # start of the refractory period
        V_m = c
        U_m += d
        emit_spike()
